PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['name'], expName, expInfo['date'])
  Experiment info = {'name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = black
  expName = singleton
  exportHTML = on Save
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'k'
      correctAns = $corrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent letter_1
      letterHeight = 0.03
      pos [set every repeat] = loc1
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter1
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    TextComponent letter_2
      letterHeight = 0.03
      pos [set every repeat] = loc2
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter2
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    TextComponent letter_3
      letterHeight = 0.03
      pos [set every repeat] = loc3
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter3
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    TextComponent letter_4
      letterHeight = 0.03
      pos [set every repeat] = loc4
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter4
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    TextComponent letter_5
      letterHeight = 0.03
      pos [set every repeat] = loc5
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter5
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    TextComponent letter_6
      letterHeight = 0.03
      pos [set every repeat] = loc6
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter6
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    PolygonComponent circle
      fillColor = None
      lineColor [set every repeat] = $color1
      lineWidth = 6
      pos [set every repeat] = loc1
      shape = circle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond_1
      fillColor = None
      lineColor [set every repeat] = $color2
      lineWidth = 6
      ori = 45
      pos [set every repeat] = loc2
      shape = rectangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond_2
      fillColor = None
      lineColor [set every repeat] = $color3
      lineWidth = 6
      ori = 45
      pos [set every repeat] = loc3
      shape = rectangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond_3
      fillColor = None
      lineColor [set every repeat] = $color4
      lineWidth = 6
      ori = 45
      pos [set every repeat] = loc4
      shape = rectangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond_4
      fillColor = None
      lineColor [set every repeat] = $color5
      lineWidth = 6
      ori = 45
      pos [set every repeat] = loc5
      shape = rectangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond_5
      fillColor = None
      lineColor [set every repeat] = $color5
      lineWidth = 6
      ori = 45
      pos [set every repeat] = loc6
      shape = rectangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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  Routine blank
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr == 1:
            fb_color = 'blue'
            fb_text = 'correct!'
        if key_resp.corr == 0:
            fb_color = 'red'
            fb_text = 'incorrect!'
    TextComponent text_3
      color [set every repeat] = $fb_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine instructions
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        On this task, you will see a set of shapes. Your task is to find the CIRCLE as quickly as you can. All other shapes will be diamonds.

        When you find, the circle, determine which letter is inside it (F or K) and press the corresponding key on your keyboard as fast as possible.

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        On half of the trials, one of the diamonds will be red instead of green. The red item will NEVER be the circle, so you should do your best to ignore it. All other items will be green.

        Are you ready to start some practice trials?

        Press the spacebar to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_practice
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    TextComponent text_6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice. The real trials will start now. They will be the same, except you won't get feedback about your accuracy.

        Press the spacebar to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exitRoutine
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    TextComponent text_7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please wait while your data saves...
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Flow
  Routine instructions
  Routine instructions2
  Routine blank
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', [0, -0.3]), ('loc2', [-0.26, -0.15]), ('loc3', [0, 0.3]), ('loc4', [0.26, -0.15]), ('loc5', [0.26, 0.15]), ('loc6', [-0.26, 0.15]), ('color1', 'green'), ('color2', 'green'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'K'), ('letter3', 'F'), ('letter4', 'F'), ('letter5', 'K'), ('letter6', 'K'), ('trial_type', 'no-distractor'), ('corrResp', 'F')]),
      OrderedDict([('loc1', [0.26, -0.15]), ('loc2', [0, -0.3]), ('loc3', [0, 0.3]), ('loc4', [-0.26, 0.15]), ('loc5', [0.26, 0.15]), ('loc6', [-0.26, -0.15]), ('color1', 'green'), ('color2', 'red'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'K'), ('letter2', 'F'), ('letter3', 'F'), ('letter4', 'K'), ('letter5', 'F'), ('letter6', 'K'), ('trial_type', 'distractor'), ('corrResp', 'K')]),
      OrderedDict([('loc1', [0, 0.3]), ('loc2', [0.26, 0.15]), ('loc3', [-0.26, 0.15]), ('loc4', [-0.26, -0.15]), ('loc5', [0.26, -0.15]), ('loc6', [0, -0.3]), ('color1', 'green'), ('color2', 'green'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'F'), ('letter3', 'K'), ('letter4', 'F'), ('letter5', 'K'), ('letter6', 'K'), ('trial_type', 'no-distractor'), ('corrResp', 'F')]),
      OrderedDict([('loc1', [-0.26, -0.15]), ('loc2', [0, 0.3]), ('loc3', [0, -0.3]), ('loc4', [0.26, 0.15]), ('loc5', [0.26, -0.15]), ('loc6', [-0.26, 0.15]), ('color1', 'green'), ('color2', 'red'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'F'), ('letter3', 'K'), ('letter4', 'F'), ('letter5', 'K'), ('letter6', 'K'), ('trial_type', 'distractor'), ('corrResp', 'F')])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
    Routine trial
    Routine feedback
    Routine blank
  LoopTerminator trials_2
  Routine end_practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('loc1', [-0.26, 0.15]), ('loc2', [-0.26, -0.15]), ('loc3', [0, -0.3]), ('loc4', [0.26, 0.15]), ('loc5', [0, 0.3]), ('loc6', [0.26, -0.15]), ('color1', 'green'), ('color2', 'green'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'F'), ('letter3', 'F'), ('letter4', 'K'), ('letter5', 'K'), ('letter6', 'K'), ('trial_type', 'no-distractor'), ('corrResp', 'f')]),
      OrderedDict([('loc1', [-0.26, 0.15]), ('loc2', [0, 0.3]), ('loc3', [0, -0.3]), ('loc4', [-0.26, -0.15]), ('loc5', [0.26, 0.15]), ('loc6', [0.26, -0.15]), ('color1', 'green'), ('color2', 'red'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'K'), ('letter2', 'F'), ('letter3', 'F'), ('letter4', 'F'), ('letter5', 'K'), ('letter6', 'K'), ('trial_type', 'distractor'), ('corrResp', 'k')]),
      OrderedDict([('loc1', [-0.26, -0.15]), ('loc2', [0.26, -0.15]), ('loc3', [-0.26, 0.15]), ('loc4', [0.26, 0.15]), ('loc5', [0, -0.3]), ('loc6', [0, 0.3]), ('color1', 'green'), ('color2', 'green'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'F'), ('letter3', 'K'), ('letter4', 'K'), ('letter5', 'K'), ('letter6', 'F'), ('trial_type', 'no-distractor'), ('corrResp', 'f')]),
      OrderedDict([('loc1', [0, 0.3]), ('loc2', [0.26, 0.15]), ('loc3', [0.26, -0.15]), ('loc4', [-0.26, -0.15]), ('loc5', [0, -0.3]), ('loc6', [-0.26, 0.15]), ('color1', 'green'), ('color2', 'red'), ('color3', 'green'), ('color4', 'green'), ('color5', 'green'), ('color6', 'green'), ('letter1', 'F'), ('letter2', 'K'), ('letter3', 'K'), ('letter4', 'K'), ('letter5', 'F'), ('letter6', 'F'), ('trial_type', 'distractor'), ('corrResp', 'f')])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
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine exitRoutine
